#  Test form Example Qudi configuration file.
#
#  test virture RS-454 message for PZT PI E517, GCS Commond, COM4, "MOV 01 **", "MOV X **"
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    #module_server:
    #    address: 'localhost'
    #    port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        #remoteaccess: True

    piezo_stage_nanos:
        module.Class: 'motor.piezo_stage_pi_py_gcs2.PiezoStagePI_PyGCS2'
        pi_controller_mask: 'E-727'
        pi_piezo_stage_mask: 'P-563'

        first_axis_label: 'x'
        second_axis_label: 'y'
        third_axis_label: 'z'

        first_axis_ID: '1'
        second_axis_ID: '2'
        third_axis_ID: '3'

        first_min: 0e-6 # in m
        first_max: 300e-6 # in m
        second_min: 0e-6 # in m
        second_max: 300e-6 # in m
        third_min: 150e-6 # in m ; BE CAREFUL, may damage the object lens in z axis!#FIXME：not affective now, set in logic ScannerMotorInterfuse
        third_max: 160e-6 # in m; BE CAREFUL, may damage the object lens in z axis!#FIXME：not affective now, set in logic ScannerMotorInterfuse

        first_axis_step: 1e-9 # in m
        second_axis_step: 1e-9 # in m
        third_axis_step: 1e-9 # in m

logic:

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'save'

    piezo_scanner_interfuse:
        module.Class: 'interfuse.confocal_scanner_motor_interfuse.ScannerMotorInterfuse'
        connect:
            counterlogic: 'counter'
            stage1: 'piezo_stage_nanos'
        scanner_position_ranges:
            - [0e-6, 300e-6]
            - [0e-6, 300e-6]
            - [150e-6, 160e-6] #FIXME：this is affective. BE CAREFUL, may damage the object lens in z axis!
            - [-10.0, 10.0]  # defual axix: a = 0.0

    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'piezo_scanner_interfuse'
            savelogic: 'save'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'piezo_scanner_interfuse'
            fitlogic: 'fit'

    poimanager:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scanner'
            optimizerlogic: 'optimizer'
            savelogic: 'save'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner'
            savelogic: 'save'
            optimizerlogic1: 'optimizer'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanagergui:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanager'
            scannerlogic: 'scanner'
